PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1128, 752]
  backgroundFit = cover
  backgroundImg = Conditions/background.bmp
  expName = Experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen bei unserem Experiment

        Danke für die Teilnahme

        bla bla bla

        Drücken Sie Space um weiter zu kommen
    KeyboardComponent Next_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent Python_Eyetracking_setUp
      Code Type = Both
      Before Experiment:
        # Imports
        import pylink
        import platform
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from string import ascii_letters, digits
        import eyetracking
        # Set to False if you want to use eyetracking
        dummy_mode = True
        # Set name for data folder for EDFs
        eyetracker_data_folder = eyetracking.create_eyetracking_folder()
        # Creates by default a folder with the name "eyetracker data"
      Before JS Experiment:
        import * as pylink from 'pylink';
        import * as platform from 'platform';
        import {EyeLinkCoreGraphicsPsychoPy} from 'EyeLinkCoreGraphicsPsychoPy';
        import {ascii_letters, digits} from 'string';
        import * as eyetracking from 'eyetracking';
        dummy_mode = true;
        eyetracker_data_folder = eyetracking.create_eyetracking_folder();
      Begin Experiment:
        # Variable for naming EDF
        edf_fname = expInfo['participant']
        # States that EDF name should be the same as the behavioral experiment
        # Check if EDF-name is valid
        eyetracking.edf_name_check(edf_fname)
        # => should not be longer than 8 characters and only contain letters, digits and
        # underscores
        # Connects host PC and stimulus PC
        el_tracker = eyetracking.connect_tracker(dummy_mode)
        edf_file = eyetracking.open_edf_file(el_tracker, edf_fname)
        eyetracking.configure_tracker(el_tracker, dummy_mode)
      Begin JS Experiment:
        edf_fname = expInfo["participant"];
        eyetracking.edf_name_check(edf_fname);
        el_tracker = eyetracking.connect_tracker(dummy_mode);
        edf_file = eyetracking.open_edf_file(el_tracker, edf_fname);
        eyetracking.configure_tracker(el_tracker, dummy_mode);
  Routine FocusCross
    ImageComponent FocusCrossImg
      image = Conditions/sailor_void.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent EyeTrackingFlagFocusCross
      Code Type = Auto->JS
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      Each Frame:
        if t == FocusCrossImg.tStart:
            el_tracker.sendMessage('fxon')
        elif t == FocusCrossImg.tStop:
            el_tracker.sendMessage('fxoff')
  Routine DigitSpanCodeDisplayLoopExample
    CodeComponent CodeDigitSpanDisplayFullDuration
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopExplainDigitSpan.finished = True
  Routine DigitSpanEndLoop
    CodeComponent code
      Code Type = Auto->JS
  Routine DSFindMaxEndInnerLoop
    CodeComponent CodeAfterDisplayLoop
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopDigitSpan.finished = True
  Routine DSFindMaxEndOuterLoop
    CodeComponent CodeEndDigitSpanFindMax
      Code Type = Auto->JS
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      Before Experiment:
        file = open("DigitSpanMax.txt","w")
      Begin Routine:
        if(NumberOfLoopComplete >= 3):
            NumberOfLoopComplete = 0
            CorrectDigits = []
            #pls note this is debugging to make progress :)
            if(CorrectLoops >= 2):
                CorrectLoops = 0
                CurrentDigitChecking = CurrentDigitChecking + 1
                #pls note this is debugging to make progress :)
                if CurrentDigitChecking >= 9:
                    #ends the loop even if all correct
                    #--> caps at max digitSpan
                    #saves the CurrentDigitChecking as a file for later useage
                    file.write(str(CurrentDigitChecking))
                    file.close()

                    LoopMaxDigitSpanFind.finished = True
            else:
                CorrectLoops = 0

                #saves the CurrentDigitChecking as a file for later useage
                file.write(str(CurrentDigitChecking))
                file.close()

                LoopMaxDigitSpanFind.finished = True
  Routine DSExplainEndInnerLoop
    CodeComponent CodeDSExplainInnerLoopEnd
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopExplainDigitSpan.finished = True
  Routine DSScala
    TextComponent DSTextScala
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie sicher sind Sie mit der Antwort:) ? 
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    SliderComponent Slider_Respone_Certainty
      forceEndRoutine = True
      granularity = 1
      labels = ("sehr", "wenig", "mittel", "viel")
      letterHeight = 0.05
      pos = (0, -0.2)
      size [set every frame] = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4)
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    CodeComponent DSCodeFlagScala
      Code Type = Auto->JS
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      Each Frame:
        if t == DSTextScala.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DSTextScala.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
  Routine DSExplaineExample
    TextComponent TextDigtSpanExample
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        erklärt den unterschied zum normalen DigitSpan

        Es folgen ein paar teil runs zum testen ob es verstanden wurde

        space to go next
    KeyboardComponent KeyDigitSpanExplainExample
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DSCheckFindMax
    TextComponent TextAskForDigitSpan
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Bitte mit dem Keyboard die gezeiten Zahlen wiederholen
    TextComponent TextRespose
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respons
    KeyboardComponent KeyCheckCorrent
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent CodeCorrectAnswer
      Code Type = Auto->JS
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      Begin Routine:
        respons = ""

        last_len = 0
        key_list = []

        responeCorrect = False
      Each Frame:
        if(len(KeyCheckCorrent.keys) > last_len):
            #handels keyupdates
            last_len = len(KeyCheckCorrent.keys);
            key_list.append(KeyCheckCorrent.keys.pop());

            respons = "".join(key_list)

            if(len(key_list) >= CurrentDigitChecking):
               if (key_list == CorrectDigits):
                    #handels when response correct;
                    CorrectLoops = CorrectLoops + 1;
               CorrectDigits.clear()
               continueRoutine = False
      End Routine:
        NumberOfLoopComplete = NumberOfLoopComplete + 1
    TextComponent Testing_1
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $CorrectLoops
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    TextComponent Testing_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $CorrectDigits
    TextComponent Testing_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $key_list
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  Routine DSDisplayLetter
    TextComponent DisplayedItem
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Digits
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  Routine DSSetUpVars
    CodeComponent SetUpDigitSpanFinder
      Code Type = Auto->JS
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      Before Experiment:
        #is used for the max number of digits
        #maxes at 9
        CurrentDigitChecking = 3

        #Saves the current loop number max 3
        NumberOfLoopComplete = 0

        #Saves the correct loops
        #if 2/3 --> +1 CurrentDigitChecking
        CorrectLoops = 0

        #saves the current number of digits displayed
        LoopCounter = 0

        #Array of correct Digits
        CorrectDigits = []
      Begin Routine:
        #calibration adn validation
        eyetracking.calibration_validation(el_tracker, win, dummy_mode)
  Routine DSExplaineFindMax
    TextComponent TextExplainDigitSpanMaxFind
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Erklärt was in der näcshte aufgabe getan wird :)

        Space to continue
    KeyboardComponent KeyDigitspanFindMax
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DSTrailsEndInnerLoop
    CodeComponent DSEndInnerLoops
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            DSLoopTrailsInner.finished = True
  Routine DSDisplayReal
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es folgen nun 30 Tests mit der gleichen Aufgabe.
        Wir würden sie bitten diese gleich aus zufüllen.

        Press space to continue
    KeyboardComponent Next_DigitSpanReal
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NBExplain
    TextComponent TextNBackExplain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Erklärt den NBack

        Space for next
    KeyboardComponent KeyNextNBackExplain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NBDisplayDigitExplain
    TextComponent TextNBackDisplayDigit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent KeyResponseNBExplain
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent NBCodeExplain
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
        NBackOrder.append(int(Digits))

        if(len(NBackOrder) > NBackNumber):
            #if the NBackOrder is long enouth to start testing
            if(NBackOrder[len(NBackOrder) - NBackNumber - 1] == int(Digits)):
                #handels repose = correct
                correctResponceNBack = "y"
            else:
                #handels repose = wrong
                correctResponceNBack = "n"
      End Routine:
        NBackLoops = NBackLoops + 1

        #finishes the test run after 20 NBacks
        if(NBackLoops  >= 20):
            NBack.finished = True
  Routine NBFullTest
    TextComponent TextNBFullTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es kommten weiter NBacks

        Space to next
    KeyboardComponent KeyResponseNBFull
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NBackFullDisplayDigit
    TextComponent TextNBackDisplayDigitFull
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent KeyResponseNBFullTest
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent NBCodeFull
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
        NBackOrder.append(int(Digits))

        if(len(NBackOrder) > NBackNumber):
            #if the NBackOrder is long enouth to start testing
            if(NBackOrder[len(NBackOrder) - NBackNumber - 1] == int(Digits)):
                #handels repose = correct
                correctResponceNBack = "y"
            else:
                #handels repose = wrong
                correctResponceNBack = "n"
      Each Frame:
        if t == TextNBackDisplayDigitFull.tStart:
            el_tracker.sendMessage('NBFullon')
        elif t == TextNBackDisplayDigitFull.tStop:
            el_tracker.sendMessage('NBFulloff')
      End Routine:
        NBackLoops = NBackLoops + 1

        thisExp.addData('NBackFull', NBackLoops)

        #finishes the NBack after getting all the single task data
        #now 100
        if(NBackLoops  >= 100):
            NBack.finished = True
  Routine DTExplain
    TextComponent TextDTExplain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Explains the DT

        space to next
    KeyboardComponent KeyResponseDTExplain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DT_DS_InnerLoopEnd
    CodeComponent DT_DS_CodeEndInnerLoop
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        #displaies the max found digits - 2
        if LoopCounter >= (CurrentDigitChecking - 2):
            LoopCounter = 0
            DT_DS_InnerLoop.finished = True
  Routine DT_NB_Display
    TextComponent DT_NB_TextDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent DT_NB_KeyResponse
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent DT_NB_CodeEndNB
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
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      Each Frame:
        if t == DT_NB_TextDisplay.tStart:
            el_tracker.sendMessage('DTNBon')
        elif t == DT_NB_TextDisplay.tStop:
            el_tracker.sendMessage('DTNBoff')
      End Routine:
        DTNBackNumber = DTNBackNumber + 1

        thisExp.addData('DTNBackNumber', DTNBackNumber)

        #finishes the NBack after the size of DT
        #currently 10
        if(DTNBackNumber  >= 10):
            DT_NB_NBackLoop.finished = True
  Routine DT_ManageVars
    CodeComponent DT_ManageVarsCode
      Code Type = Auto->JS
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      Before Experiment:
        #holds the overall trail number
        #1-30
        DTTrailNumber = 0

        #holds the current NBack number
        #1-10
        DTNBackNumber = 0

        #holds id of the response in DS
        #1
        #pls note i am not sure how where to get this data as is audio quelle :(
        DTDigitSpanNumberResponse = 0

        #holds the response in the digitspan scala
        #1-4
        DTDigitSpanSacalaResponse = 0
      Begin Routine:
        DTTrailNumber = DTTrailNumber + 1
        thisExp.addData('DTTrailNumber ', DTTrailNumber)
  Routine DT_DS_ResponseScala
    TextComponent DT_DS_TextScala
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie sicher sind Sie mit der Antwort:) ? 
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    SliderComponent DT_DS_Scala
      forceEndRoutine = True
      granularity = 1
      labels = ("sehr", "wenig", "mittel", "viel")
      letterHeight = 0.05
      pos = (0, -0.2)
      size [set every frame] = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4)
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    CodeComponent DT_DS_CodeSaveScala
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_TextScala.tStart:
            el_tracker.sendMessage('DTDSScalaon')
        elif t == DT_DS_TextScala.tStop:
            el_tracker.sendMessage('DTDSScalaoff')
      End Routine:
        DTDigitSpanSacalaResponse = DT_DS_Scala.getRating()
        thisExp.addData('DTDigitSpanSacalaResponse', DTNBackNumber)
  Routine EyeTrackingStart
    CodeComponent EyeTrackingStartCode
      Code Type = Auto->JS
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      Begin Routine:
        eyetracking.start_recording(el_tracker)
  Routine EyeTrackingStop
    CodeComponent EyeTrackingStopCode
      Code Type = Auto->JS
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      End Routine:
        eyetracking.stop_recording(el_tracker)
  Routine EndScreen
    TextComponent TextEndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dane für die Teilnahme :)

        "Esc" zum verlassen
    CodeComponent EyeTrackingEndScreen
      Code Type = Auto->JS
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      Begin Routine:
        eyetracking.close_tracker_download_edf(el_tracker, edf_file, edf_fname,
        eyetracker_data_folder)
  Routine DSAudioDisplayExplain
    SoundComponent DSSoundExplain
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DSCodeFullFlags
      Code Type = Auto->JS
  Routine DSDisplayDigitAudioFull
    SoundComponent DSDisplaySoundFull
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DSEyeTrackingFlagFull
      Code Type = Auto->JS
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      Each Frame:
        if t == DSSound.tStart:
            el_tracker.sendMessage('NBFullon')
        elif t == DSSound.tStop:
            el_tracker.sendMessage('NBFulloff')
  Routine DT_DS_DisplayAudio
    SoundComponent DT_DS_Audio
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DT_DS_EyeTrackingFlag
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_Audio.tStart:
            el_tracker.sendMessage('DTDSon')
        elif t == DT_DS_Audio.tStop:
            el_tracker.sendMessage('DTDSoff')
  Routine DT_DS_ResponeInAudio
    TextComponent DT_DS_TextResponseInAudio
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bitte der Testperson ihre Zahlen wieder geben :)

        Danach Space drücken um weiter zu kommen
    KeyboardComponent KeyResponseNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent DT_DS_EyeTrackingFlagResponse
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_TextResponseInAudio.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DT_DS_TextResponseInAudio.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
  Routine DSResponseAudio
    TextComponent DSTextResponseAudio
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bitte der Testperson ihre Zahlen wieder geben :)

        Danach Space drücken um weiter zu kommen
    KeyboardComponent DSAudioKeyNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent DSCodeFlag
      Code Type = Auto->JS
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      Each Frame:
        if t == DSTextResponseAudio.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DSTextResponseAudio.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
  Routine DSDisplayAudioFindMax
    SoundComponent DSDisplayAudio
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Welcome
  Routine DSSetUpVars
  Routine DSExplaineFindMax
  LoopInitiator LoopMaxDigitSpanFind loopType="TrialHandler"
    loopType = sequential
    nReps = 9
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    LoopInitiator LoopDigitSpan loopType="TrialHandler"
      conditionsFile = Conditions/Conditions_Digits.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'Digits': 1.0},
        {'Digits': 2.0},
        {'Digits': 3.0},
        {'Digits': 4.0},
        {'Digits': 5.0},
        {'Digits': 6.0},
        {'Digits': 7.0},
        {'Digits': 8.0},
        {'Digits': 9.0}]
      Routine DSDisplayLetter
      Routine FocusCross
      Routine DSFindMaxEndInnerLoop
    LoopTerminator LoopDigitSpan
    Routine DSCheckFindMax
    Routine DSScala
    Routine DSFindMaxEndOuterLoop
  LoopTerminator LoopMaxDigitSpanFind
  Routine DSExplaineExample
  LoopInitiator LoopExplainDigitSpanOuter loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator LoopExplainDigitSpan loopType="TrialHandler"
      conditionsFile = Conditions/Conditions_Digits.xlsx
      isTrials = False
      loopType = random
      nReps = 9
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      conditions:
        [{'Digits': 1.0},
        {'Digits': 2.0},
        {'Digits': 3.0},
        {'Digits': 4.0},
        {'Digits': 5.0},
        {'Digits': 6.0},
        {'Digits': 7.0},
        {'Digits': 8.0},
        {'Digits': 9.0}]
      Routine DSAudioDisplayExplain
      Routine FocusCross
      Routine DSExplainEndInnerLoop
    LoopTerminator LoopExplainDigitSpan
    Routine DSResponseAudio
    Routine DSScala
  LoopTerminator LoopExplainDigitSpanOuter
  Routine DSDisplayReal
  Routine EyeTrackingStart
  LoopInitiator DSLoopTrailsOuter loopType="TrialHandler"
    loopType = random
    nReps = 30
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    LoopInitiator DSLoopTrailsInner loopType="TrialHandler"
      conditionsFile = Conditions/Conditions_Digits.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Digits': 1.0},
        {'Digits': 2.0},
        {'Digits': 3.0},
        {'Digits': 4.0},
        {'Digits': 5.0},
        {'Digits': 6.0},
        {'Digits': 7.0},
        {'Digits': 8.0},
        {'Digits': 9.0}]
      Routine DSDisplayDigitAudioFull
      Routine FocusCross
      Routine DSTrailsEndInnerLoop
    LoopTerminator DSLoopTrailsInner
    Routine DSResponseAudio
    Routine DSScala
  LoopTerminator DSLoopTrailsOuter
  Routine EyeTrackingStop
  Routine NBExplain
  LoopInitiator NBLoopExplain loopType="TrialHandler"
    conditionsFile = Conditions/Conditions_Digits.xlsx
    isTrials = False
    loopType = random
    nReps = 9
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    conditions:
      [{'Digits': 1.0},
      {'Digits': 2.0},
      {'Digits': 3.0},
      {'Digits': 4.0},
      {'Digits': 5.0},
      {'Digits': 6.0},
      {'Digits': 7.0},
      {'Digits': 8.0},
      {'Digits': 9.0}]
    Routine NBDisplayDigitExplain
  LoopTerminator NBLoopExplain
  Routine NBFullTest
  Routine EyeTrackingStart
  LoopInitiator NBLoopFull loopType="TrialHandler"
    conditionsFile = Conditions/Conditions_Digits.xlsx
    isTrials = False
    loopType = random
    nReps = 20
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    conditions:
      [{'Digits': 1.0},
      {'Digits': 2.0},
      {'Digits': 3.0},
      {'Digits': 4.0},
      {'Digits': 5.0},
      {'Digits': 6.0},
      {'Digits': 7.0},
      {'Digits': 8.0},
      {'Digits': 9.0}]
    Routine NBackFullDisplayDigit
  LoopTerminator NBLoopFull
  Routine EyeTrackingStop
  Routine DTExplain
  Routine EyeTrackingStart
  LoopInitiator DT_Full_Loop loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine DT_ManageVars
    LoopInitiator DT_DS_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions_Digits.xlsx
      isTrials = False
      loopType = random
      nReps = 9
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      conditions:
        [{'Digits': 1.0},
        {'Digits': 2.0},
        {'Digits': 3.0},
        {'Digits': 4.0},
        {'Digits': 5.0},
        {'Digits': 6.0},
        {'Digits': 7.0},
        {'Digits': 8.0},
        {'Digits': 9.0}]
      Routine DT_DS_DisplayAudio
      Routine FocusCross
      Routine DT_DS_InnerLoopEnd
    LoopTerminator DT_DS_InnerLoop
    LoopInitiator DT_NB_NBackLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions_Digits.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'Digits': 1.0},
        {'Digits': 2.0},
        {'Digits': 3.0},
        {'Digits': 4.0},
        {'Digits': 5.0},
        {'Digits': 6.0},
        {'Digits': 7.0},
        {'Digits': 8.0},
        {'Digits': 9.0}]
      Routine DT_NB_Display
    LoopTerminator DT_NB_NBackLoop
    Routine DT_DS_ResponeInAudio
    Routine DT_DS_ResponseScala
  LoopTerminator DT_Full_Loop
  Routine EyeTrackingStop
  Routine EndScreen
